PsychoPy2experiment version="1.85.2"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Save excel file = True
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  expName = replication(6)
  Screen = 1
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Routines
  Routine instr_3
    ImageComponent image_3
      startVal [time (s)] = 0.0
      image = C:\Users\student\Desktop\Finaal\instr_3.jpg
      size = (1800, 950)
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine WM
    StaticComponent ISI_4
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
    PolygonComponent memory_1
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 0.250
      pos [set every repeat] = $mwm_cor_r1
      ori [set every repeat] = $m1_wm
      startVal [time (s)] = 1
      size = (102.5, 18.5)
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    PolygonComponent memory_2
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 0.250
      pos [set every repeat] = $mwm_cor_r2
      ori [set every repeat] = $m2_wm
      startVal [time (s)] = 1
      size = (102.5, 18.5)
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    PolygonComponent memory_3
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 0.250
      pos [set every repeat] = $mwm_cor_r3
      ori [set every repeat] = $m3_wm
      startVal [time (s)] = 1
      size = (102.5, 18.5)
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    PolygonComponent memory_4
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 0.250
      pos [set every repeat] = $mwm_cor_r4
      ori [set every repeat] = $m4_wm
      startVal [time (s)] = 1
      size = (102.5, 18.5)
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    PolygonComponent memory_5
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 0.250
      pos [set every repeat] = $mwm_cor_r5
      ori [set every repeat] = $m5_wm
      startVal [time (s)] = 1
      size = (102.5, 18.5)
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    PolygonComponent memory_6
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 0.250
      pos [set every repeat] = $mwm_cor_r6
      ori [set every repeat] = $m6_wm
      startVal [time (s)] = 1
      size = (102.5, 18.5)
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    PolygonComponent memory_7
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 0.250
      pos [set every repeat] = $mwm_cor_r7
      ori [set every repeat] = $m7_wm
      startVal [time (s)] = 1
      size = (102.5, 18.5)
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    PolygonComponent memory_8
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 0.250
      pos [set every repeat] = $mwm_cor_r8
      ori [set every repeat] = $m8_wm
      startVal [time (s)] = 1
      size = (102.5, 18.5)
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    StaticComponent ISI_5
      stopVal [duration (s)] = 0.9
      startVal [time (s)] = 1.250
    PolygonComponent test_1
      fillColor = $[1,1,1]
      pos [set every repeat] = $twm_cor_r1
      ori [set every repeat] = $t1_wm
      startVal [time (s)] = 2.150
      size = (102.5, 18.5)
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    PolygonComponent test_2
      fillColor = $[1,1,1]
      pos [set every repeat] = $twm_cor_r2
      ori [set every repeat] = $t2_wm
      startVal [time (s)] = 2.150
      size = (102.5, 18.5)
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    PolygonComponent test_3
      fillColor = $[1,1,1]
      pos [set every repeat] = $twm_cor_r3
      ori [set every repeat] = $t3_wm
      startVal [time (s)] = 2.150
      size = (102.5, 18.5)
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    PolygonComponent test_4
      fillColor = $[1,1,1]
      pos [set every repeat] = $twm_cor_r4
      ori [set every repeat] = $t4_wm
      startVal [time (s)] = 2.150
      size = (102.5, 18.5)
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    PolygonComponent test_5
      fillColor = $[1,1,1]
      pos [set every repeat] = $twm_cor_r5
      ori [set every repeat] = $t5_wm
      startVal [time (s)] = 2.150
      size = (102.5, 18.5)
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    PolygonComponent test_6
      fillColor = $[1,1,1]
      pos [set every repeat] = $twm_cor_r6
      ori [set every repeat] = $t6_wm
      startVal [time (s)] = 2.150
      size = (102.5, 18.5)
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    PolygonComponent test_7
      fillColor = $[1,1,1]
      pos [set every repeat] = $twm_cor_r7
      ori [set every repeat] = $t7_wm
      startVal [time (s)] = 2.150
      size = (102.5, 18.5)
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    PolygonComponent test_8
      fillColor = $[1,1,1]
      pos [set every repeat] = $twm_cor_r8
      ori [set every repeat] = $t8_wm
      startVal [time (s)] = 2.150
      size = (102.5, 18.5)
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    PolygonComponent cue_wm
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 0.100
      pos [set every repeat] = $wm_cue_coor
      lineWidth = 6
      ori [set every repeat] = $wm_cue_ori
      startVal [time (s)] = 2.250
      nVertices = 2
      size = (83.8,1.4)
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    KeyboardComponent cnahge_wm_resp
      correctAns = $cor_ans_wm
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'left','right'
      startVal [time (s)] = 2.350
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    TextComponent fix_cross_wm
      color = red
      text = +
      startVal [time (s)] = 0.0
      letterHeight = 20
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  Routine FM
    StaticComponent ISI
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
    PolygonComponent memory1
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 0.250
      pos [set every repeat] = $mfm_cor_r1
      ori [set every repeat] = $m1_fm
      startVal [time (s)] = 1
      size = (102.5, 18.5)
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    PolygonComponent memory2
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 0.250
      pos [set every repeat] = $mfm_cor_r2
      ori [set every repeat] = $m2_fm
      startVal [time (s)] = 1
      size = (102.5, 18.5)
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    PolygonComponent memory3
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 0.250
      pos [set every repeat] = $mfm_cor_r3
      ori [set every repeat] = $m3_fm
      startVal [time (s)] = 1
      size = (102.5, 18.5)
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    PolygonComponent memory4
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 0.250
      pos [set every repeat] = $mfm_cor_r4
      ori [set every repeat] = $m4_fm
      startVal [time (s)] = 1
      size = (102.5, 18.5)
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    PolygonComponent memory5
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 0.250
      pos [set every repeat] = $mfm_cor_r5
      ori [set every repeat] = $m5_fm
      startVal [time (s)] = 1
      size = (102.5, 18.5)
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    PolygonComponent memory6
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 0.250
      pos [set every repeat] = $mfm_cor_r6
      ori [set every repeat] = $m6_fm
      startVal [time (s)] = 1
      size = (102.5, 18.5)
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    PolygonComponent memory7
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 0.250
      pos [set every repeat] = $mfm_cor_r7
      ori [set every repeat] = $m7_fm
      startVal [time (s)] = 1
      size = (102.5, 18.5)
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    PolygonComponent memory8
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 0.250
      pos [set every repeat] = $mfm_cor_r8
      ori [set every repeat] = $m8_fm
      startVal [time (s)] = 1
      size = (102.5, 18.5)
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    StaticComponent ISI_2
      stopVal [duration (s)] = 1
      startVal [time (s)] = 1.250
    PolygonComponent cue
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 0.100
      pos [set every repeat] = $fm_cue_coor
      lineWidth = 6
      ori [set every repeat] = $fm_cue_ori
      startVal [time (s)] = 2.250
      nVertices = 2
      size = (83.8,1.4)
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    StaticComponent ISI_3
      stopVal [duration (s)] = 0.9
      startVal [time (s)] = 2.350
    PolygonComponent test1
      fillColor = $[1,1,1]
      pos [set every repeat] = $tfm_cor_r1
      ori [set every repeat] = $t1_fm
      startVal [time (s)] = 3.250
      size = (102.5, 18.5)
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    PolygonComponent test2
      fillColor = $[1,1,1]
      pos [set every repeat] = $tfm_cor_r2
      ori [set every repeat] = $t2_fm
      startVal [time (s)] = 3.250
      size = (102.5, 18.5)
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    PolygonComponent test3
      fillColor = $[1,1,1]
      pos [set every repeat] = $tfm_cor_r3
      ori [set every repeat] = $t3_fm
      startVal [time (s)] = 3.250
      size = (102.5, 18.5)
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    PolygonComponent test4
      fillColor = $[1,1,1]
      pos [set every repeat] = $tfm_cor_r4
      ori [set every repeat] = $t4_fm
      startVal [time (s)] = 3.250
      size = (102.5, 18.5)
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    PolygonComponent test5
      fillColor = $[1,1,1]
      pos [set every repeat] = $tfm_cor_r5
      ori [set every repeat] = $t5_fm
      startVal [time (s)] = 3.250
      size = (102.5, 18.5)
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    PolygonComponent test6
      fillColor = $[1,1,1]
      pos [set every repeat] = $tfm_cor_r6
      ori [set every repeat] = $t6_fm
      startVal [time (s)] = 3.250
      size = (102.5, 18.5)
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    PolygonComponent test7
      fillColor = $[1,1,1]
      pos [set every repeat] = $tfm_cor_r7
      ori [set every repeat] = $t7_fm
      startVal [time (s)] = 3.250
      size = (102.5, 18.5)
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    PolygonComponent test8
      fillColor = $[1,1,1]
      pos [set every repeat] = $tfm_cor_r8
      ori [set every repeat] = $t8_fm
      startVal [time (s)] = 3.250
      size = (102.5, 18.5)
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    KeyboardComponent change_fm_resp
      correctAns = $cor_ans_fm
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'left','right'
      startVal [time (s)] = 3.250
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    TextComponent fix_cross
      color = red
      text = +
      startVal [time (s)] = 0.0
      letterHeight = 20
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  Routine instr_4
    ImageComponent image_4
      startVal [time (s)] = 0.0
      image = C:\Users\student\Desktop\Finaal\instr_4_PAS.jpg
      size = (1800, 950)
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    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine instr_5
    ImageComponent image_5
      startVal [time (s)] = 0.0
      image = C:\Users\student\Desktop\Finaal\instr_5.jpg
      size = (1800, 950)
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    KeyboardComponent key_resp_7
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine WM_PAS
    ImageComponent image_7
      startVal [time (s)] = 0.0
      image = C:\Users\student\Desktop\Finaal\instr_pas.jpg
      size = (1800, 950)
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    KeyboardComponent key_resp_10
      forceEndRoutine = True
      allowedKeys = '1','2','3','4'
      startVal [time (s)] = 0.0
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  Routine FM_PAS
    ImageComponent image_6
      startVal [time (s)] = 0.0
      image = C:\Users\student\Desktop\Finaal\instr_pas.jpg
      size = (1800, 950)
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    KeyboardComponent key_resp_9
      forceEndRoutine = True
      allowedKeys = '1','2','3','4'
      startVal [time (s)] = 0.0
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  Routine instr_1
    ImageComponent image
      startVal [time (s)] = 0.0
      image = C:\Users\student\Desktop\Finaal\instr_1.jpg
      size = (1800, 950)
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine instr_2
    ImageComponent image_2
      startVal [time (s)] = 0.0
      image = C:\Users\student\Desktop\Finaal\instr_2.jpg
      size = (1800, 950)
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine end_of_exp
    TextComponent text
      text = Это конец тренировочной части.
      startVal [time (s)] = 0.0
      letterHeight = 60
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  Routine instr_1
  Routine instr_2
  Routine instr_3
  Routine instr_4
  Routine instr_5
  LoopInitiator conditions_loop loopType="TrialHandler"
    conditionsFile = table_train.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'twm_cor_r4': [150, 150], 'loop_wm': 0, 'm4_wm': 135, 'fm_cue_coor': [0, 134], 't4_fm': 0, 'm3_wm': 0, 'tfm_cor_r6': [150, -150], 'tfm_cor_r1': [-300, 0], 'tfm_cor_r3': [0, 300], 'tfm_cor_r2': [-150, 150], 'm8_wm': 45, 't7_fm': 45, 'tfm_cor_r8': [-150, -150], 'mwm_cor_r3': [0, 300], 't1_fm': 0, 'fm_cue_ori': 90, 't6_fm': 90, 'm1_wm': 0, 'twm_cor_r1': [-300, 0], 't3_wm': 0, 'm5_wm': 135, 't8_wm': 45, 'm6_fm': 90, 'wm_cue_ori': 90, 'mwm_cor_r7': [0, -300], 'mwm_cor_r1': [-300, 0], 'm4_fm': 0, 'loop_fm': 1, 'm7_fm': 45, 'mwm_cor_r2': [-150, 150], 'mfm_cor_r8': [-150, -150], 'mwm_cor_r4': [150, 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,
      {'twm_cor_r4': [150, 150], 'loop_wm': 0, 'm4_wm': 0, 'fm_cue_coor': [-60, 60], 't4_fm': 90, 'm3_wm': 45, 'tfm_cor_r6': [150, -150], 'tfm_cor_r1': [-300, 0], 'tfm_cor_r3': [0, 300], 'tfm_cor_r2': [-150, 150], 'm8_wm': 90, 't7_fm': 45, 'tfm_cor_r8': [-150, -150], 'mwm_cor_r3': [0, 300], 't1_fm': 45, 'fm_cue_ori': 45, 't6_fm': 0, 'm1_wm': 135, 'twm_cor_r1': [-300, 0], 't3_wm': 45, 'm5_wm': 45, 't8_wm': 90, 'm6_fm': 0, 'wm_cue_ori': 315, 'mwm_cor_r7': [0, -300], 'mwm_cor_r1': [-300, 0], 'm4_fm': 90, 'loop_fm': 1, 'm7_fm': 45, 'mwm_cor_r2': [-150, 150], 'mfm_cor_r8': [-150, -150], 'mwm_cor_r4': [15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,
      {'twm_cor_r4': [150, 150], 'loop_wm': 0, 'm4_wm': 135, 'fm_cue_coor': [0, -134], 't4_fm': 45, 'm3_wm': 90, 'tfm_cor_r6': [150, -150], 'tfm_cor_r1': [-300, 0], 'tfm_cor_r3': [0, 300], 'tfm_cor_r2': [-150, 150], 'm8_wm': 0, 't7_fm': 90, 'tfm_cor_r8': [-150, -150], 'mwm_cor_r3': [0, 300], 't1_fm': 135, 'fm_cue_ori': 270, 't6_fm': 0, 'm1_wm': 90, 'twm_cor_r1': [-300, 0], 't3_wm': 90, 'm5_wm': 135, 't8_wm': 0, 'm6_fm': 0, 'wm_cue_ori': 225, 'mwm_cor_r7': [0, -300], 'mwm_cor_r1': [-300, 0], 'm4_fm': 45, 'loop_fm': 1, 'm7_fm': 45, 'mwm_cor_r2': [-150, 150], 'mfm_cor_r8': [-150, -150], 'mwm_cor_r4': [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,
      {'twm_cor_r4': [150, 150], 'loop_wm': 0, 'm4_wm': 90, 'fm_cue_coor': [134, 0], 't4_fm': 135, 'm3_wm': 90, 'tfm_cor_r6': [150, -150], 'tfm_cor_r1': [-300, 0], 'tfm_cor_r3': [0, 300], 'tfm_cor_r2': [-150, 150], 'm8_wm': 45, 't7_fm': 90, 'tfm_cor_r8': [-150, -150], 'mwm_cor_r3': [0, 300], 't1_fm': 90, 'fm_cue_ori': 180, 't6_fm': 135, 'm1_wm': 45, 'twm_cor_r1': [-300, 0], 't3_wm': 90, 'm5_wm': 135, 't8_wm': 45, 'm6_fm': 135, 'wm_cue_ori': 180, 'mwm_cor_r7': [0, -300], 'mwm_cor_r1': [-300, 0], 'm4_fm': 135, 'loop_fm': 1, 'm7_fm': 90, 'mwm_cor_r2': [-150, 150], 'mfm_cor_r8': [-150, -150], 'mwm_cor_r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
    LoopInitiator loop_1 loopType="TrialHandler"
      loopType = random
      nReps = loop_fm
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      Routine FM
      Routine FM_PAS
    LoopTerminator loop_1
    LoopInitiator loop_2 loopType="TrialHandler"
      loopType = random
      nReps = loop_wm
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      Routine WM
      Routine WM_PAS
    LoopTerminator loop_2
  LoopTerminator conditions_loop
  Routine end_of_exp
